OpenViBE-Scenario

0xc67a01dc Mensia Input Signal
  Global = true
  Channel Index = 1
  Sample Count Per Sent Block = 8
-> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 0.2
  High Cut-off Frequency (Hz) = 40
  Band Pass Ripple (dB) = 0.5
-> Online Eye Blink Correction => #2
  Time Window (in sec) = 20
  Lower Rank Sources Count = 0
  Higher Rank Sources Count = 2
#2.Cleaned Signal -> Metric Arousal => #3
  Time Based Epoching Duration (in sec) = 4
  Time Based Epoching Interval (in sec) = 0.5
#3.Output Arousal 1 -> Mensia Output Signal
  Channel = 1
#2.Cleaned Signal -> Metric Valence => #5
  Time Based Epoching Duration (in sec) = 4
  Time Based Epoching Interval (in sec) = 0.5
#5.Output Valence 1 -> Mensia Output Signal
  Channel = 2
